PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': '', 'which button yes': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = of-a
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation_box5
      fillColor = None
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      shape = rectangle
      size = (600,450)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rt
      units = pix
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        isi = (random() * .2) + .4
        thisExp.addData('isi', isi)
        start_time = isi + .7
        rt = start_time + 2
        thisExp.addData('img_onset', start_time)

        if em_trial == "happy":
            image_path3 = image_path[trial_num]
            if stim_trial == "same":
                image_path4 = image_path[trial_num]
            elif stim_trial == "different":
                image_path4 = image_path1[trial_num]
        elif em_trial == "anger":
            image_path3 = image_path_ang[trial_num]
            if stim_trial == "same":
                image_path4 = image_path_ang[trial_num]
            elif stim_trial == "different":
                image_path4 = image_path1_ang[trial_num]

        trial_num += 1
      End Experiment:
        makehuman.send("shutdown")
    ImageComponent image
      image [set every repeat] = $image_path3
      size = (400, 300)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = .2
      units = pix
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    ImageComponent image_2
      image [set every repeat] = $image_path4
      size = (400,300)
      startVal [time (s)] = $start_time
      stopVal [duration (s)] = .2
      units = pix
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    KeyboardComponent key_resp_6
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rt
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  Routine titrate
    PolygonComponent fixation_box2
      fillColor = None
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      saveStartStop = False
      shape = rectangle
      size = (666, 500)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.1
      units = pix
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    ImageComponent image_3
      image [set every repeat] = $path3
      size = [533,400]
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = .2
      units = pix
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    ImageComponent image_4
      image [set every repeat] = $path2
      size [set every repeat] = [533,400]
      startVal [time (s)] = 1.9
      stopVal [duration (s)] = .2
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = '1','8'
      correctAns = $correctKey
      forceEndRoutine = True
      startVal [time (s)] = 1.9
      stopVal [duration (s)] = 2.2
      storeCorrect = True
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    CodeComponent code_20
      Code Type = Py
      Begin Routine:
        size1 = [453, 613]
        shuffle(size1)
        first_size = size1[0]
        second_size = size1[0]*0.75
        image_4_size = (first_size, second_size)
        image_4.size = image_4_size
        thisExp.addData('image_size2', image_4_size)
  Routine instr
    CodeComponent code_2
      Code Type = Py
      Before Experiment:
        import numpy as np
        import os
        from glob import glob
        import math
        _thisDir = os.path.dirname(os.path.abspath(__file__))
        os.chdir(_thisDir)
        # first, setup your directories and load your pre-existing sample models:
        # the psychopy project directory
        path = _thisDir
        accuracy_level = 0
        # you may want a different image size
        size = (533,400)
        settings = dict(AA=False, dimensions=size, lightmapSSS=False)

        n_happy = 0 #trial number
        n_anger = 0
        s = .925 #step size
        c_happy = 1.8 # starting stimulus intensity
        c_anger = 1.8
        happy_value = 0
        anger_value = 0
        acc = .68 #target accuracy level
        reversals_happy = 0
        reversals_anger = 0
        z_list_happy = []
        z_list_anger = []

        happy_count = 0
        anger_count = 0
      Begin Experiment:
        win.mouseVisible = False
      Begin Routine:
        image_base = path+"/happy/MH_00"
        image_baseA = path+"/angry/MH_00"
        train1 = path+"/training_titration/happy_exemplar.png"
        train3 = path+"/training_titration/anger_exemplar.png"
        exemplar = "0576"
        exemplarA = "0673"
        path3 = image_base + str(exemplar) + '.png'
        path2 = image_base + '1499.png'
        if expInfo['which button yes'] == "left":
            correctKey = 1
            instructionsLink = "left.png"
        elif expInfo['which button yes'] == "right":
            correctKey = 8
            instructionsLink = "right.png"
        n_happy+=1
        n_anger+=1

        accuracy_train = 0
      End Experiment:
        win.mouseVisible = True
    ImageComponent image_11
      image [set every repeat] = $instructionsLink
      saveStartStop = False
      size = (796, 658)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_2
      allowedKeys = 'c'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine titrate_1
    PolygonComponent fixation_box
      fillColor = None
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      saveStartStop = False
      shape = rectangle
      size = (666, 500)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.1
      units = pix
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    ImageComponent image_5
      image [set every repeat] = $path3
      size = [533,400]
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = .2
      units = pix
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    ImageComponent image_6
      image [set every repeat] = $path2
      size [set every repeat] = [533,400]
      startVal [time (s)] = 1.9
      stopVal [duration (s)] = .2
      units = pix
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    KeyboardComponent key_resp_3
      allowedKeys = '1','8'
      correctAns = $correctKey
      forceEndRoutine = True
      startVal [time (s)] = 1.9
      stopVal [duration (s)] = 2.2
      storeCorrect = True
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    CodeComponent code_19
      Code Type = Py
      Begin Routine:
        size1 = [453, 613]
        shuffle(size1)
        first_size = size1[0]
        second_size = size1[0]*0.75
        image_6_size = (first_size, second_size)
        image_6.size = image_6_size
        thisExp.addData('image_size2', image_6_size)
  Routine rendering
    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        trial_num = 0
        # where are you saving your mhm files?
        out_model_path = os.path.join(path,"generated_models")
        # where are you saving your images?
        img_path = os.path.join(path,"renders")
        image_path = []
        image_path_ang = []
        image_path1 = []
        image_path1_ang = []
        model_number = 60

        for model_number in range(60,70):
            # make a model (depending on your experiment, you could make a bunch ahead of time,
            #  but then you may as well use the Generate Faces plugin on the GUI instead)
            faceX = fg.make_new_face(avg_face, face_arr)

            # save a model to model_path
            model_path = os.path.join(out_model_path, "face{0:04d}.mhm".format(model_number))
            fg.write_mimic_file(avg_path, model_path, keys, faceX)

            # load the model into makehuman
            makehuman.load_model(model_path)
            # set an emotional expression at a specific percentage
            makehuman.set_expression(neutral, emotion, 67.4) # 0.0 would be purely neutral, 100 would be "fully" expressing the emotion.
            # render the model
            # use the "image_path" variable in a PsychoPy ImageStim image instead of printing it
            image_path0 = makehuman.get_render(img_path, settings, str(model_number))
            path8 = str(img_path) + '/render_' + str(model_number) + '.png'
            image_path.append(path8)
            makehuman.load_model(model_path)
            makehuman.set_expression(neutral, emotion, next_stim_percent)
            image_path2 = makehuman.get_render(img_path, settings, str(model_number)+"_copy")
            path4 = str(img_path) +'/render_' + str(model_number) + '_copy.png'
            image_path1.append(path4)
            #print(image_path)
            # get ready for the next model
            model_number+=1

        for model_number in range(70,80):
            # make a model (depending on your experiment, you could make a bunch ahead of time,
            #  but then you may as well use the Generate Faces plugin on the GUI instead)
            faceX = fg.make_new_face(avg_face, face_arr)

            # save a model to model_path
            model_path = os.path.join(out_model_path, "face{0:04d}.mhm".format(model_number))
            fg.write_mimic_file(avg_path, model_path, keys, faceX)

            # load the model into makehuman
            makehuman.load_model(model_path)
            # set an emotional expression at a specific percentage
            makehuman.set_expression(neutral, emotion1, 57.7) # 0.0 would be purely neutral, 100 would be "fully" expressing the emotion.
            # render the model
            # use the "image_path" variable in a PsychoPy ImageStim image instead of printing it
            image_pathA = makehuman.get_render(img_path, settings, str(model_number))
            pathA = str(img_path) + '/render_' + str(model_number) + '.png'
            image_path_ang.append(pathA)
            makehuman.load_model(model_path)
            makehuman.set_expression(neutral, emotion1, next_stim_percentA)
            image_path2A = makehuman.get_render(img_path, settings, str(model_number)+"_copy")
            path2A = str(img_path) +'/render_' + str(model_number) + '_copy.png'
            image_path1_ang.append(path2A)
            #print(image_path)
            # get ready for the next model
            model_number+=1

        image_path3 = image_path[0]
        image_path4 = image_path1[0]
  Routine render_text
    TextComponent text_3
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Now rendering ...
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  Routine which_em
    CodeComponent code_6
      Code Type = Py
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      Begin Routine:
        em = ['anger', 'happy']
        stim = ['same', 'different']
        shuffle(em)
        shuffle(stim)
        em_trial = em[0]
        stim_trial = stim[0]
        thisExp.addData("em", em[0])
        thisExp.addData("stim", stim[0])
  Routine titrate_1A
    PolygonComponent fixation_box3
      fillColor = None
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      saveStartStop = False
      shape = rectangle
      size = (500, 375)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent image_7
      image [set every repeat] = $path3
      size = (400,300)
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = .2
      units = pix
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    ImageComponent image_8
      image [set every repeat] = $path2
      size = (400,300)
      startVal [time (s)] = 1.9
      stopVal [duration (s)] = .2
      units = pix
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    KeyboardComponent key_resp_4
      allowedKeys = '1','8'
      correctAns = $correctKey
      forceEndRoutine = True
      startVal [time (s)] = 1.9
      storeCorrect = True
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    CodeComponent code_7
      Code Type = Py
      End Routine:
        path3 = image_baseA + str(exemplarA) + '.png'
        if key_resp_4.corr == 0:
            z_listA.append(0)
            z = z_listA[n-1]
        elif key_resp_4.corr == 1:
            z_listA.append(1)
            z = z_listA[n-1]
        if n>2:
            if z_listA[n-2] == 0:
                if z_listA[n-1] == 1:
                    reversals+=1
            elif z_listA[n-2]==1:
                if z_listA[n-1]==0:
                    reversals+=1
        thisExp.addData("stim_lev", c)
        thisExp.addData("trial_n", n)
        if n<3:
            next_stimA = c - (s/n)*(z-acc)
            next_stim_percentA = math.ceil(next_stimA*1000) - 1
            next_stim_percentA = format(next_stim_percentA, "04")
            c = next_stimA
            path2 = image_baseA + str(next_stim_percentA) + '.png'
            n+=1
  Routine titrateA
    PolygonComponent fixation_box4
      fillColor = None
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      saveStartStop = False
      shape = rectangle
      size = (500,375)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent image_9
      image [set every repeat] = $path3
      size = (400,300)
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = .2
      units = pix
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    ImageComponent image_10
      image [set every repeat] = $path2
      size = (400,300)
      startVal [time (s)] = 1.9
      stopVal [duration (s)] = .2
      units = pix
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    KeyboardComponent key_resp_5
      allowedKeys = '1','8'
      correctAns = $correctKey
      forceEndRoutine = True
      startVal [time (s)] = 1.9
      storeCorrect = True
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    CodeComponent code_9
      Code Type = Py
      End Routine:
        path3 = image_baseA + str(exemplarA) + '.png'

        if key_resp_5.corr == 0:
            z_listA.append(0)
            z = z_listA[n-1]
        elif key_resp_5.corr == 1:
            z_listA.append(1)
            z = z_listA[n-1]

        if z_listA[n-2] == 0:
            if z_listA[n-1] == 1:
                reversals+=1
        elif z_listA[n-2]==1:
            if z_listA[n-1]==0:
                reversals+=1
        thisExp.addData("stim_lev", c)
        thisExp.addData("trial_n", n)
        if n>=3:
            if c > .3:
                next_stimA = c - (s/(2+reversals))*(z-acc)
                next_stim_percentA = math.ceil(next_stimA*1000) - 1
                next_stim_percentA = format(next_stim_percentA, "04")
                c = next_stimA
                path2 = image_baseA + str(next_stim_percentA) + '.png'
                n+=1
  Routine next_em
    CodeComponent code_8
      Code Type = Py
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      Begin Routine:
        n=0
        s = .925 #step size
        c = 1.5 # starting stimulus intensity
        acc = .8 #target accuracy level
        reversals = 0
        z_listA = []

        path3 = image_baseA + str(exemplarA) + '.png'
        path2 = image_baseA + '1499.png'
        n+=1
  Routine code_13
    CodeComponent code_14
      Code Type = Py
      Begin Routine:
        if expInfo['which em first'] == 'happy':
            titrated_value = next_stim * 100
            titrated_valueA = next_stimA * 100
            thisExp.addData('happy_val', titrated_value)
            thisExp.addData('anger_val', titrated_valueA)
        elif expInfo['which em first'] == 'anger':
            titrated_value = next_stim * 100
            titrated_valueA = next_stimA * 100
            thisExp.addData('happy_val', titrated_valueA)
            thisExp.addData('anger_val', titrated_value)
  Routine ending
    TextComponent text_10
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You've reached the end of the task.
        Please inform the researcher.
        Thank you for your participation.
    KeyboardComponent key_resp_9
      allowedKeys = 'q'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_24
      Code Type = Py
      Begin Routine:
        happy_value = c_happy * 100
        anger_value = c_anger * 100
  Routine instr2
    CodeComponent code_10
      Code Type = Py
      Begin Routine:
        if expInfo['which em first'] == 'happy':
            if expInfo['which button yes'] == "left":
                correctKey = 1
                instructionsLink = "anger_left_first.png"
            elif expInfo['which button yes'] == "right":
                correctKey = 8
                instructionsLink = "anger_right_first.png"
        elif expInfo['which em first'] == 'anger':
            if expInfo['which button yes'] == "left":
                correctKey = 1
                instructionsLink = "happy_left_first.png"
            elif expInfo['which button yes'] == "right":
                correctKey = 8
                instructionsLink = "happy_right_first.png"
        accuracy_train = 0
    ImageComponent image_12
      image [set every repeat] = $instructionsLink
      saveStartStop = False
      size = (796, 619)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice
    CodeComponent code_11
      Code Type = Py
      Begin Routine:
        stim = ['same', 'different']
        em = ['happy', 'anger']
        shuffle(stim)
        shuffle(em)
        stim_pick = stim[0]
        em_pick = em[0]
        if happy_count >= 25: #for main practice (1/2 of trials should be one emotion)
            em_pick = "anger"
        if anger_count >= 25:
            em_pick = "happy"
        if stim_pick == "same":
            if em_pick == "happy":
                train1 = path+"/training_titration/happy_exemplar.png"
                train2 = path+"/training_titration/happy_exemplar.png"
                happy_count+=1
            elif em_pick == 'anger':
                train1 = path+"/training_titration/anger_exemplar.png"
                train2 = path+"/training_titration/anger_exemplar.png"
                anger_count+=1
            if expInfo['which button yes'] == "left":
                corrAns = 8
            elif expInfo['which button yes'] == "right":
                corrAns = 1
        elif stim_pick == "different":
            if em_pick == 'happy':
                train1 = path+"/training_titration/happy_exemplar.png"
                train2 = path +"/training_titration/happy_150.png"
                happy_count+=1
            elif em_pick == 'anger':
                train1 = path+"/training_titration/anger_exemplar.png"
                train2 = path +"/training_titration/anger_150.png"
                anger_count+=1
            if expInfo['which button yes'] == "left":
                corrAns = 1
            elif expInfo['which button yes'] == "right":
                corrAns = 8
      End Routine:
        if key_resp_11.corr == 1:
            accuracy_train +=1
    PolygonComponent fixation_box8
      fillColor = None
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      saveStartStop = False
      shape = rectangle
      size = (666, 500)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.1
      units = pix
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    ImageComponent image_13
      image [set every repeat] = $train1
      size = [533,400]
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = .2
      units = pix
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    ImageComponent image_14
      image [set every repeat] = $train2
      size [set every repeat] = [533,400]
      startVal [time (s)] = 1.9
      stopVal [duration (s)] = .2
      units = pix
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    KeyboardComponent key_resp_11
      allowedKeys = '1','8'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.9
      stopVal [duration (s)] = 2.2
      storeCorrect = True
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    CodeComponent code_18
      Code Type = Py
      Begin Routine:
        #picking image size dimensions for second face (to prevent image matching)
        size1 = [453, 613]
        shuffle(size1)
        first_size = size1[0]
        second_size = size1[0]*0.75
        image_14_size = (first_size, second_size)
        image_14.size = image_14_size
        thisExp.addData('image_size2', image_14_size)
  Routine accuracy
    CodeComponent code_12
      Code Type = Py
      Begin Routine:
        accuracy_level = accuracy_train / 50
        thisExp.addData('accuracy', accuracy_level)
        if accuracy_level < 0.9:
            statement = "Part of practice complete."
            pre_statement = "Continue."
        else:
            statement = "Practice complete."
            pre_statement = "Next training."
      End Routine:
        if key_resp_7.keys == "c":
            trials_6.finished = True
        em = ["happy", "anger"]
        shuffle(em)
        em_pick = em[0]
        if em_pick == "happy":
            path2 = image_base + '1799.png'
            path3 = image_base + str(exemplar) + '.png'
        if em_pick == "anger":
            path2 = image_baseA + '1799.png'
            path3 = image_baseA + str(exemplarA) + '.png'
        accuracy_train = 0
        accuracy_level = 0
        happy_count = 0
        anger_count = 0
    TextComponent text
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $statement
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    KeyboardComponent key_resp_7
      allowedKeys = 'c', 'r'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ready
    TextComponent text_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Practice done. Press the right button to begin the task.
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    KeyboardComponent key_resp_8
      allowedKeys = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_17
      Code Type = Py
      Begin Routine:
        happy_count = 0
        anger_count = 0

        # the face_generator.py file is from the face generator plugin
        import face_generator as fg
        import numpy as np
        import os
        from glob import glob
        # the socket plugin comes with py_client.py
        from py_client import PythonMHC
        _thisDir = os.path.dirname(os.path.abspath(__file__))
        os.chdir(_thisDir)
        # first, setup your directories and load your pre-existing sample models:
        # the psychopy project directory
        path = _thisDir
        # where are the pre-established models (aside from the average identity)?
        model_samples = os.path.join(path,"sample_models")
        models_list = glob(os.path.join(model_samples, "*.mhm"))
        # set the path/name to your average identity
        avg_path = os.path.join(path,"identity_average.mhm")
        # load the average identity's parameters
        avg = fg.read_params(avg_path)

        # load the other models' parameters
        full_params = [fg.read_params(f) for f in models_list]

        # load the keys, the average, and the rest of the models
        all_stuff = fg.get_ordered_values(avg, *full_params)
        # the keys for the features being changed
        keys = all_stuff[0]
        # the average face parameters (similar to avg, but it includes 0's for key values that exist in the other model files)
        avg_face = all_stuff[1]
        face_arr = np.array(all_stuff[2:])
        radius, face_arr = fg.set_faces_to_radius(avg_face, face_arr)

        # get ready to actually make models and render things.
        # these are the render settings
        # you may want a different image size
        size = (400,300)
        settings = dict(AA=False, dimensions=size, lightmapSSS=False)

        # start the socket client (do this after you already pressed the Socket Render button in MakeHuman)
        makehuman = PythonMHC()

        emotion_file = path + "/happy_teeth.mhpose"
        emotion_file_ang = path + "/anger.mhpose"
        # load the expression parameters for neutral and some emotion (as specified by an mhpose file).
        neutral, emotion = makehuman.load_expression(emotion_file)
        neutral, emotion1 = makehuman.load_expression(emotion_file_ang)

        # where are you saving your mhm files?
        out_model_path = os.path.join(path,"titrated_models")
        # where are you saving your images?
        img_path = os.path.join(path,"titration_renders")
        image_path = []
        image_path_ang = []
        image_path1 = []
        image_path1_ang = []
        model_number = 0
        participant_n = int(expInfo['participant'])
  Routine practice2
    CodeComponent code_16
      Code Type = Py
      Begin Routine:
        stim = ['same', 'different']
        shuffle(stim)
        stim_pick = stim[0]
        if stim_pick == "same":
            if expInfo['which em first'] == 'happy':
                train4 = path+"/training_titration/anger_exemplar.png"
            if expInfo['which em first'] == 'anger':
                train4 = path+"/training_titration/happy_exemplar.png"
            if expInfo['which button yes'] == "left":
                corrAns = 8
            if expInfo['which button yes'] == "right":
                corrAns = 1
        elif stim_pick == "different":
            if expInfo['which em first'] == 'happy':
                train4 = path +"/training_titration/anger_150.png"
            if expInfo['which em first'] == 'anger':
                train4 = path +"/training_titration/happy_150.png"
            if expInfo['which button yes'] == "left":
                corrAns = 1
            if expInfo['which button yes'] == "right":
                corrAns = 8
      End Routine:
        if key_resp_13.corr == 1:
            accuracy_train +=1
    PolygonComponent polygon
      fillColor = None
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      saveStartStop = False
      shape = rectangle
      size = (500,375)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent image_15
      image [set every repeat] = $train3
      size = (400, 300)
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = .2
      units = pix
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    ImageComponent image_16
      image [set every repeat] = $train4
      size = (400,300)
      startVal [time (s)] = 1.9
      stopVal [duration (s)] = .2
      units = pix
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    KeyboardComponent key_resp_13
      allowedKeys = '1','8'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine accuracy2
    CodeComponent code_15
      Code Type = Py
      Begin Routine:
        accuracy_level = accuracy_train / 25
        thisExp.addData('accuracy', accuracy_level)
      End Routine:
        if key_resp_12.keys == "c":
            trials_8.finished = True
    TextComponent text_4
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $accuracy_level
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    KeyboardComponent key_resp_12
      allowedKeys = 'c','r'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
    CodeComponent code_21
      Code Type = Py
      Begin Routine:
        if key_resp_11.keys is None:
            fb_message = "Too Slow!"
            timeout = 1
        else:
            fb_message = " "
            fb_color = 'green'
            timeout = 0 #meaning this routine is skipped if there is a response
    PolygonComponent fixation_box0
      fillColor = None
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      shape = rectangle
      size = (666,500)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $timeout
      units = pix
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    TextComponent text_5
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $timeout
      text [set every repeat] = $fb_message
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  Routine feedback0
    CodeComponent code_22
      Code Type = Py
      Begin Routine:
        if key_resp_3.keys is None:
            fb_message = "Too Slow!"
            timeout = 1
        else:
            fb_message = " "
            fb_color = 'green'
            timeout = 0
    PolygonComponent fixation_box1
      fillColor = None
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      shape = rectangle
      size = (666,500)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $timeout
      units = pix
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    TextComponent text_6
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $timeout
      text [set every repeat] = $fb_message
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  Routine feedback1
    CodeComponent code_23
      Code Type = Py
      Begin Routine:
        if key_resp.keys is None:
            fb_message = "Too Slow!"
            timeout = 1
        else:
            fb_message = " "
            fb_color = 'green'
            timeout = 0
    PolygonComponent fixation_box7
      fillColor = None
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      shape = rectangle
      size = (500,375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $timeout
      units = pix
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    TextComponent text_7
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $timeout
      text [set every repeat] = $fb_message
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  Routine stimLevels
    TextComponent text_8
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = H:
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    TextComponent text_9
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $happy_value
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    TextComponent text_11
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = A:
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    TextComponent text_12
      color = black
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $anger_value
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    KeyboardComponent key_resp_14
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine begin
    TextComponent text_13
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press the right key when you are ready to begin.
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    KeyboardComponent key_resp_15
      allowedKeys = '8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine example_1
    CodeComponent code_25
      Code Type = Py
      Begin Routine:
        if expInfo["which button yes"] == "right":
            cb_example = "LEFT"
            cb_example2 = "RIGHT"
        elif expInfo["which button yes"] == "left":
            cb_example = "RIGHT"
            cb_example2 = "LEFT"
    TextComponent text_14
      color = black
      letterHeight = 0.05
      pos = (-.2, -.4)
      startVal [time (s)] = 0.0
      text = Press
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    TextComponent text_15
      color = black
      letterHeight = 0.05
      pos = (.2, -.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $cb_example
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    ImageComponent image_17
      image = examples/happy_1.png
      pos = (-.2, 0)
      size = (.4,.3)
      startVal [time (s)] = 0.0
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    TextComponent text_16
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = ->
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    ImageComponent image_18
      image = examples/happy_1.png
      pos = (0.2, 0)
      size = (.4, .3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_16
      allowedKeys = '1', '8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine example_2
    TextComponent text_17
      color = black
      letterHeight = 0.05
      pos = (-0.2, -.4)
      startVal [time (s)] = 0.0
      text = Press
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    TextComponent text_18
      color = black
      letterHeight = 0.05
      pos = (0.2, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $cb_example2
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    TextComponent text_19
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = ->
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    ImageComponent image_19
      image = examples/happy_1.png
      pos = (-0.2, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_20
      image = examples/happy_2.png
      pos = (0.2, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_17
      allowedKeys = '1','8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine example_3
    TextComponent text_20
      color = black
      letterHeight = 0.05
      pos = (-0.2, -0.4)
      startVal [time (s)] = 0.0
      text = Press
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    TextComponent text_21
      color = black
      letterHeight = 0.05
      pos = (0.2, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $cb_example
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    TextComponent text_22
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = ->
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    ImageComponent image_21
      image = examples/anger_1.png
      pos = (-.2, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_22
      image = examples/anger_1.png
      pos = (0.2, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_18
      allowedKeys = '1', '8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine example_4
    TextComponent text_23
      color = black
      letterHeight = 0.05
      pos = (-.2, -.4)
      startVal [time (s)] = 0.0
      text = Press
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    TextComponent text_24
      color = black
      letterHeight = 0.05
      pos = (.2, -.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $cb_example2
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    TextComponent text_25
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = ->
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    ImageComponent image_23
      image = examples/anger_1.png
      pos = (-0.2, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_24
      image = examples/anger_2.png
      pos = (0.2, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_19
      allowedKeys = '1', '8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine accuracy_pre
    CodeComponent code_26
      Code Type = Py
      Begin Routine:
        accuracy_level = accuracy_train / 10
        thisExp.addData('accuracy', accuracy_level)
        if accuracy_level < 0.9:
            statement = "Part of practice complete."
            pre_statement = "Continue."
        else:
            statement = "Practice complete."
            pre_statement = "Next practice."
      End Routine:
        accuracy_train = 0
        accuracy_level = 0
        happy_count = 0
        anger_count = 0
    TextComponent text_26
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $pre_statement
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    KeyboardComponent key_resp_20
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rendering1
    CodeComponent code_27
      Code Type = Py
      Begin Routine:
        model_number = model_number + 1
        faceX = fg.make_new_face(avg_face, face_arr)
        # save a model to model_path
        model_path = os.path.join(out_model_path, "face{:04d}{:04d}.mhm".format(participant_n, model_number))
        fg.write_mimic_file(avg_path, model_path, keys, faceX)
        if key_resp_3.corr == 0:
            if em_pick == "happy":
                z_list_happy.append(0)
                z_h = z_list_happy[n_happy-1]
            elif em_pick == "anger":
                z_list_anger.append(0)
                z_a = z_list_anger[n_anger-1]
        elif key_resp_3.corr == 1:
            if em_pick == "happy":
                z_list_happy.append(1)
                z_h = z_list_happy[n_happy-1]
            elif em_pick == "anger":
                z_list_anger.append(1)
                z_a = z_list_anger[n_anger-1]
        if em_pick == "happy":
            happy_count +=1
            if n_happy>2:
                if z_list_happy[n_happy-2] == 0:
                    if z_list_happy[n_happy-1] == 1:
                        reversals_happy+=1
                elif z_list_happy[n_happy-2]==1:
                    if z_list_happy[n_happy-1]==0:
                        reversals_happy+=1
            n_happy+=1
        elif em_pick == "anger":
            anger_count+=1
            if n_anger>2:
                if z_list_anger[n_anger-2] == 0:
                    if z_list_anger[n_anger-1] == 1:
                        reversals_anger+=1
                elif z_list_anger[n_anger-2]==1:
                    if z_list_anger[n_anger-1]==0:
                        reversals_anger+=1
            n_anger+=1
        thisExp.addData("stim_lev_happy", c_happy)
        thisExp.addData("stim_lev_anger", c_anger)
        thisExp.addData("trial_n_happy", n_happy)
        thisExp.addData("trial_n_anger", n_anger)
        thisExp.addData("this_em", em_pick)
        em = ["happy", "anger"]
        shuffle(em)
        next_em_pick = em[0]
        if happy_count >= 2:
            next_em_pick = "anger"
        if anger_count >= 2:
            next_em_pick = "happy"
        if next_em_pick == "happy":
            makehuman.load_model(model_path)
            # set an emotional expression at a specific percentage
            makehuman.set_expression(neutral, emotion, 57.7)
            image_path0 = makehuman.get_render(img_path, settings, str(model_number))
            path3 = str(img_path) + '/render_' + str(model_number) + '.png'
            if n_happy==1:
                makehuman.load_model(model_path)
                # set an emotional expression at a specific percentage
                makehuman.set_expression(neutral, emotion, 180)
                image_path0 = makehuman.get_render(img_path, settings, str(model_number)+"copy")
                path2 = str(img_path) + '/render_' + str(model_number) +"copy"+ '.png'
            else:
                next_stim = c_happy - (s/n_happy)*(z_h-acc)
                next_stim_percent = math.ceil(next_stim*100)
                makehuman.load_model(model_path)
                # set an emotional expression at a specific percentage
                makehuman.set_expression(neutral, emotion, next_stim_percent)
                image_path0 = makehuman.get_render(img_path, settings, str(model_number)+"copy")
                path2 = str(img_path) + '/render_' + str(model_number)+"copy" + '.png'
                c_happy = next_stim
        elif next_em_pick == "anger":
            makehuman.load_model(model_path)
            # set an emotional expression at a specific percentage
            makehuman.set_expression(neutral, emotion1, 67.4)
            image_path0 = makehuman.get_render(img_path, settings, str(model_number))
            path3 = str(img_path) + '/render_' + str(model_number) + '.png'
            if n_anger==1:
                makehuman.load_model(model_path)
                # set an emotional expression at a specific percentage
                makehuman.set_expression(neutral, emotion1, 180)
                image_path0 = makehuman.get_render(img_path, settings, str(model_number)+"copy")
                path2 = str(img_path) + '/render_' + str(model_number) +"copy"+ '.png'
            else:
                next_stim = c_anger - (s/n_anger)*(z_a-acc)
                next_stim_percent = math.ceil(next_stim*100)
                makehuman.load_model(model_path)
                # set an emotional expression at a specific percentage
                makehuman.set_expression(neutral, emotion1, next_stim_percent)
                image_path0 = makehuman.get_render(img_path, settings, str(model_number)+"copy")
                path2 = str(img_path) + '/render_' + str(model_number)+"copy" + '.png'
                c_anger = next_stim
        em_pick = next_em_pick
  Routine rendering2
    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        model_number = model_number + 1
        faceX = fg.make_new_face(avg_face, face_arr)
        # save a model to model_path
        model_path = os.path.join(out_model_path, "face{:04d}{:04d}.mhm".format(participant_n, model_number))
        fg.write_mimic_file(avg_path, model_path, keys, faceX)

        if key_resp.corr == 0:
            if em_pick == "happy":
                z_list_happy.append(0)
                z_h = z_list_happy[n_happy-1]
            elif em_pick == "anger":
                z_list_anger.append(0)
                z_a = z_list_anger[n_anger-1]
        elif key_resp.corr == 1:
            if em_pick == "happy":
                z_list_happy.append(1)
                z_h = z_list_happy[n_happy-1]
            elif em_pick == "anger":
                z_list_anger.append(1)
                z_a = z_list_anger[n_anger-1]
        if em_pick == "happy":
            happy_count+=1
            if z_list_happy[n_happy-2] == 0:
                if z_list_happy[n_happy-1] == 1:
                    reversals_happy+=1
            elif z_list_happy[n_happy-2]==1:
                if z_list_happy[n_happy-1]==0:
                    reversals_happy+=1
            n_happy+=1
        elif em_pick == "anger":
            anger_count+=1
            if z_list_anger[n_anger-2] == 0:
                if z_list_anger[n_anger-1] == 1:
                    reversals_anger+=1
            elif z_list_anger[n_anger-2]==1:
                if z_list_anger[n_anger-1]==0:
                    reversals_anger+=1
            n_anger+=1
        thisExp.addData("stim_lev_happy", c_happy)
        thisExp.addData("stim_lev_anger", c_anger)
        thisExp.addData("trial_n_happy", n_happy)
        thisExp.addData("trial_n_anger", n_anger)
        thisExp.addData("this_em", em_pick)
        em = ["happy", "anger"]
        shuffle(em)
        next_em_pick = em[0]
        if happy_count >= 125:
            next_em_pick = "anger"
        if anger_count >= 125:
            next_em_pick = "happy"
        if next_em_pick == "happy":
            makehuman.load_model(model_path)
            # set an emotional expression at a specific percentage
            makehuman.set_expression(neutral, emotion, 57.7)
            image_path0 = makehuman.get_render(img_path, settings, str(model_number))
            path3 = str(img_path) + '/render_' + str(model_number) + '.png'
            if n_happy>=3:
                next_stim = c_happy - (s/(2+reversals_happy))*(z_h-acc)
                next_stim_percent = math.ceil(next_stim*100)
                makehuman.load_model(model_path)
                # set an emotional expression at a specific percentage
                makehuman.set_expression(neutral, emotion, next_stim_percent)
                image_path0 = makehuman.get_render(img_path, settings, str(model_number)+"copy")
                path2 = str(img_path) + '/render_' + str(model_number)+"copy" + '.png'
                c_happy = next_stim
        elif next_em_pick == "anger":
            makehuman.load_model(model_path)
            # set an emotional expression at a specific percentage
            makehuman.set_expression(neutral, emotion1, 67.4)
            image_path0 = makehuman.get_render(img_path, settings, str(model_number))
            path3 = str(img_path) + '/render_' + str(model_number) + '.png'
            if n_anger>=3:
                next_stim = c_anger - (s/(2+reversals_anger))*(z_a-acc)
                next_stim_percent = math.ceil(next_stim*100)
                makehuman.load_model(model_path)
                # set an emotional expression at a specific percentage
                makehuman.set_expression(neutral, emotion1, next_stim_percent)
                image_path0 = makehuman.get_render(img_path, settings, str(model_number)+"copy")
                path2 = str(img_path) + '/render_' + str(model_number)+"copy" + '.png'
                c_anger = next_stim
        em_pick = next_em_pick
        thisExp.addData("path_first", path3)
        thisExp.addData("path_second", path2)
  Routine buffer
    TextComponent text_29
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .1
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    PolygonComponent polygon_4
      fillColor = None
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      shape = rectangle
      size = (666, 500)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .1
      units = pix
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Flow
  Routine instr
  Routine example_1
  Routine example_2
  Routine example_3
  Routine example_4
  Routine begin
  LoopInitiator trials_4 loopType="TrialHandler"
    loopType = sequential
    nReps = 10
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    Routine practice
    Routine feedback
  LoopTerminator trials_4
  Routine accuracy_pre
  LoopInitiator trials_6 loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine begin
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = 50
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      Routine practice
      Routine feedback
    LoopTerminator trials
    Routine accuracy
  LoopTerminator trials_6
  Routine ready
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    Routine titrate_1
    Routine buffer
    Routine feedback0
    Routine buffer
    Routine rendering1
  LoopTerminator trials_3
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = sequential
    nReps = 146
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    Routine titrate
    Routine buffer
    Routine feedback1
    Routine buffer
    Routine rendering2
  LoopTerminator trials_2
  Routine ending
  Routine stimLevels
