PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': '', 'happy titrated value': '', 'anger titrated value': '', 'which button yes': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = of-b
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation_box5
      fillColor = None
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      shape = rectangle
      size = (666,500)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rt
      units = pix
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        isi = (random() * .3) + .4
        thisExp.addData('isi', isi)
        start_time = isi + .2
        rt = start_time + 2
        thisExp.addData('img_onset', start_time)

        if em_trial == "happy":
            image_path3 = image_path[trial_num]
            if stim_trial == "same":
                image_path4 = image_path[trial_num]
                if expInfo['which button yes'] == "left":
                    keyCorrect = ["8"]
                elif expInfo['which button yes'] == "right":
                    keyCorrect = ["1"]
            elif stim_trial == "different":
                image_path4 = image_path1[trial_num]
                if expInfo['which button yes'] == "left":
                    keyCorrect = ["1"]
                elif expInfo['which button yes'] == "right":
                    keyCorrect = ["8"]
            trial_num += 1
        elif em_trial == "anger":
            image_path3 = image_path_ang[trial_num0]
            if stim_trial == "same":
                image_path4 = image_path_ang[trial_num0]
                if expInfo['which button yes'] == "left":
                    keyCorrect = ["8"]
                elif expInfo['which button yes'] == "right":
                    keyCorrect = ["1"]
            elif stim_trial == "different":
                image_path4 = image_path1_ang[trial_num0]
                if expInfo['which button yes'] == "left":
                    keyCorrect = ["1"]
                elif expInfo['which button yes'] == "right":
                    keyCorrect = ["8"]
            trial_num0 += 1
        trial_num_block +=1
        thisExp.addData('imagepath', image_path4)
        thisExp.addData('imagepath2', image_path3)
      End Experiment:
        makehuman.send("shutdown")
    ImageComponent image
      image [set every repeat] = $image_path3
      size = [533, 400]
      startVal [time (s)] = 0
      stopVal [duration (s)] = .2
      units = pix
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    ImageComponent image_2
      image [set every repeat] = $image_path4
      size [set every repeat] = [533,400]
      startVal [time (s)] = $start_time
      stopVal [duration (s)] = .2
      units = pix
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    CodeComponent stim_trigger_task
      Code Type = Py
      Begin Routine:
        port.close()
        port.open()
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimTriggerSent = False
        stimTriggerSent2 = False
      Each Frame:
        #the first if statement below ensures that the subsequent if statements (and throwing of triggers)
        #only occurs once per trial. That is, only when the stimulus is presented (.status = STARTED) and
        #stimTriggerSent is still False. Once a trigger is sent, we change stimTriggerSent to True so that
        #the stimulus eeg trigger will not be sent again for this trial
        #codes: first image: 13 (hexcode: 0D) = happy, 14 (hexcode: 0E) = anger
        #second image: 15 (hexcode: 0F) = happy same, 16 (hexcode: 10) = happy different, 17 (hexcode: 11) = anger same,
        #18 (hexcode: 12) = anger different
        if image.status == STARTED and not stimTriggerSent:
            if em_trial == "happy": #code denoting which stimulus array was sent
                stimTriggerSent = True
                port.write([0x0D]) #hexcode = 13; eeg trigger sent
                time.sleep(PulseWidth) #how long to wait before clearing trigger port
                port.write([0x00]) #clear trigger port by sending hexcode = 0
            elif em_trial == "anger":
                stimTriggerSent = True
                port.write([0x0E]) #hexcode = 14; eeg trigger sent
                time.sleep(PulseWidth)
                port.write([0x00])
        if image_2.status == STARTED and not stimTriggerSent2:
            if em_trial == "happy":
                if stim_trial == "same": #code denoting which stimulus array was sent (from excel file)
                    stimTriggerSent2 = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
                    port.write([0x0F]) #hexcode = 15; eeg trigger sent
                    time.sleep(PulseWidth) #how long to wait before clearing trigger port
                    port.write([0x00]) #clear trigger port by sending hexcode = 0
                elif stim_trial == "different":
                    stimTriggerSent2 = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
                    port.write([0x10]) #hexcode = 16; eeg trigger sent
                    time.sleep(PulseWidth) #how long to wait before clearing trigger port
                    port.write([0x00]) #clear trigger port by sending hexcode = 0
            elif em_trial == "anger":
                if stim_trial == "same": #code denoting which stimulus array was sent (from excel file)
                    stimTriggerSent2 = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
                    port.write([0x11]) #hexcode = 17; eeg trigger sent
                    time.sleep(PulseWidth) #how long to wait before clearing trigger port
                    port.write([0x00]) #clear trigger port by sending hexcode = 0
                elif stim_trial == "different":
                    stimTriggerSent2 = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
                    port.write([0x12]) #hexcode = 18; eeg trigger sent
                    time.sleep(PulseWidth) #how long to wait before clearing trigger port
                    port.write([0x00]) #clear trigger port by sending hexcode = 0
    KeyboardComponent key_resp_6
      allowedKeys = '1','8'
      correctAns = $keyCorrect
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rt
      store = all keys
      storeCorrect = True
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    CodeComponent resp_trigger_task
      Code Type = Py
      Begin Routine:
        #clear out the keys_counted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if key_resp_6.keys and len(key_resp_6.keys) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(key_resp_6.keys[-1]) #add this response to list of keys pressed this trial
            # first digit: response (1:1,2:8), second digit: accuracy (1:correct,2:incorrect)
            if len(key_resp_6.keys) < 2: #if this is  the first response
                if key_resp_6.keys[-1] == '1':
                    if stim_trial == 'same':
                        if expInfo['which button yes'] == "right": #correct response
                            port.write([0x0B]) # 11
                            time.sleep(PulseWidth)
                            port.write([0x00])
                        elif expInfo['which button yes'] == "left": #incorrect response
                            port.write([0x0C])# 12
                            time.sleep(PulseWidth)
                            port.write([0x00])
                    elif stim_trial == 'different':
                        if expInfo['which button yes'] == "right": #incorrect response
                            port.write([0x0C])# 12
                            time.sleep(PulseWidth)
                            port.write([0x00])
                        elif expInfo['which button yes'] == "left": #correct response
                            port.write([0x0B])# 11
                            time.sleep(PulseWidth)
                            port.write([0x00])

                elif key_resp_6.keys[-1] == '8':
                    if stim_trial == 'same':
                        if expInfo['which button yes'] == "right": #incorrect response
                            port.write([0x0C]) # 12
                            time.sleep(PulseWidth)
                            port.write([0x00])
                        elif expInfo['which button yes'] == "left": #correct response
                            port.write([0x0B])# 11
                            time.sleep(PulseWidth)
                            port.write([0x00])
                    elif stim_trial == 'different':
                        if expInfo['which button yes'] == "right": #correct response
                            port.write([0x0B])# 11
                            time.sleep(PulseWidth)
                            port.write([0x00])
                        elif expInfo['which button yes'] == "left": #incorrect response
                            port.write([0x0C])# 12
                            time.sleep(PulseWidth)
                            port.write([0x00])

            elif len(key_resp_6.keys) >= 2: #if this is NOT the first response
                #first digit: response, second digit: accuracy
                if key_resp_6.keys[-1] == '1':
                     if stim_trial == 'same':
                        if expInfo['which button yes'] == "right": #correct response
                            port.write([0x15]) # 21
                            time.sleep(PulseWidth)
                            port.write([0x00])
                        elif expInfo['which button yes'] == "left": #incorrect response
                            port.write([0x16])# 22
                            time.sleep(PulseWidth)
                            port.write([0x00])
                     elif stim_trial == "different":
                        if expInfo['which button yes'] == "right": #incorrect response
                            port.write([0x16])# 22
                            time.sleep(PulseWidth)
                            port.write([0x00])
                        elif expInfo['which button yes'] == "left": #correct response
                            port.write([0x15])# 21
                            time.sleep(PulseWidth)
                            port.write([0x00])

                elif key_resp_6.keys[-1] == '8':
                    if stim_trial == 'same':
                        if expInfo['which button yes'] == "right": #incorrect response
                            port.write([0x16]) # 22
                            time.sleep(PulseWidth)
                            port.write([0x00])
                        elif expInfo['which button yes'] == "left": #correct response
                            port.write([0x15])# 21
                            time.sleep(PulseWidth)
                            port.write([0x00])
                    elif stim_trial == "different":
                        if expInfo['which button yes'] == "right": #correct response
                            port.write([0x15])# 21
                            time.sleep(PulseWidth)
                            port.write([0x00])
                        elif expInfo['which button yes'] == "left": #incorrect response
                            port.write([0x16])# 22
                            time.sleep(PulseWidth)
                            port.write([0x00])
    CodeComponent code_24
      Code Type = Py
      Begin Routine:
        size1 = [453, 613]
        shuffle(size1)
        first_size = size1[0]
        second_size = size1[0]*0.75
        image_2_size = (first_size, second_size)
        image_2.size = image_2_size
        thisExp.addData('image_size2', image_2_size)
  Routine titrate
    PolygonComponent fixation_box2
      fillColor = None
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      shape = rectangle
      size = (600, 450)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent image_3
      image [set every repeat] = $path3
      size = (400,300)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = .2
      units = pix
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    ImageComponent image_4
      image [set every repeat] = $path2
      size = (400,300)
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = .2
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_3
      Code Type = Py
      End Routine:
        faceX = fg.make_new_face(avg_face, face_arr)
        # save a model to model_path
        model_path0 = os.path.join(out_model_path0, "face{0:04d}.mhm".format(n))
        fg.write_mimic_file(avg_path, model_path0, keys, faceX)
        makehuman.load_model(model_path0)
        makehuman.set_expression(neutral, emotion, 67.4)
        image_path3 = makehuman.get_render(img_path0, settings, str(n))
        path3 = str(img_path0) +'/render_' + str(n) + '.png'

        if key_resp.corr == 0:
            z_list.append(0)
            z = z_list[n-1]
        elif key_resp.corr == 1:
            z_list.append(1)
            z = z_list[n-1]

        if z_list[n-2] == 0:
            if z_list[n-1] == 1:
                reversals+=1
        elif z_list[n-2]==1:
            if z_list[n-1]==0:
                reversals+=1
        thisExp.addData("stim_lev", c)
        thisExp.addData("trial_n", n)
        if n>=3:
            if c > .674:
                next_stim = c - (s/(2+reversals))*(z-acc)
                next_stim_percent = next_stim * 100
                c = next_stim
                makehuman.load_model(model_path0)
                makehuman.set_expression(neutral, emotion, next_stim_percent)
                image_path2 = makehuman.get_render(img_path0, settings, str(n)+"_titrate")
                path2 = str(img_path0) +'/render_' + str(n) + '_titrate.png'
                n+=1
  Routine instr
    CodeComponent code_14
      Code Type = Py
      Begin Routine:
        if expInfo['which button yes'] == "left":
            instructionsLink = "left_main.png"
        elif expInfo['which button yes'] == "right":
            instructionsLink = "right_main.png"
        accuracy_train = 0
    ImageComponent image_13
      image [set every repeat] = $instructionsLink
      size = (796, 658)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_2
      allowedKeys = 'c'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine titrate_1
    PolygonComponent fixation_box
      fillColor = None
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      shape = rectangle
      size = (600, 450)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent image_5
      image [set every repeat] = $path3
      size = (400,300)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = .2
      units = pix
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    ImageComponent image_6
      image [set every repeat] = $path2
      size = (400,300)
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = .2
      units = pix
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_4
      Code Type = Py
      End Routine:
        faceX = fg.make_new_face(avg_face, face_arr)
        # save a model to model_path
        model_path0 = os.path.join(out_model_path0, "face{0:04d}.mhm".format(n))
        fg.write_mimic_file(avg_path, model_path0, keys, faceX)
        makehuman.load_model(model_path0)
        makehuman.set_expression(neutral, emotion, 67.4)
        image_path3 = makehuman.get_render(img_path0, settings, str(n))
        path3 = str(img_path0) +'/render_' + str(n) + '.png'
        if key_resp_3.corr == 0:
            z_list.append(0)
            z = z_list[n-1]
        elif key_resp_3.corr == 1:
            z_list.append(1)
            z = z_list[n-1]
        if n>2:
            if z_list[n-2] == 0:
                if z_list[n-1] == 1:
                    reversals+=1
            elif z_list[n-2]==1:
                if z_list[n-1]==0:
                    reversals+=1
        thisExp.addData("stim_lev", c)
        thisExp.addData("trial_n", n)
        if n<3:
            next_stim = c - (s/n)*(z-acc)
            next_stim_percent = next_stim*100
            c = next_stim
            # save a model to model_path
            makehuman.load_model(model_path0)
            makehuman.set_expression(neutral, emotion, next_stim_percent)
            image_path2 = makehuman.get_render(img_path0, settings, str(n)+"_titrate")
            path2 = str(img_path0) +'/render_' + str(n) + '_titrate.png'
            n+=1
  Routine rendering
    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        if key_resp_10.keys == 'c':
            import face_generator as fg
            trial_num = 0
            trial_num0 = 0
            timeout1 = 0
            # where are you saving your mhm files?
            out_model_path = os.path.join(path,"generated_models")
            # where are you saving your images?
            img_path = os.path.join(path,"renders")
            image_path = []
            image_path_ang = []
            image_path1 = []
            image_path1_ang = []
            model_number = 0
            participant_n = int(expInfo['participant'])

            for model_number in range(0,84):
                # make a model (depending on your experiment, you could make a bunch ahead of time,
                #  but then you may as well use the Generate Faces plugin on the GUI instead)
                faceX = fg.make_new_face(avg_face, face_arr)

                # save a model to model_path
                model_path = os.path.join(out_model_path, "face{:04d}{:04d}.mhm".format(participant_n, model_number))
                fg.write_mimic_file(avg_path, model_path, keys, faceX)

                # load the model into makehuman
                makehuman.load_model(model_path)
                # set an emotional expression at a specific percentage
                makehuman.set_expression(neutral, emotion, 57.7) # 0.0 would be purely neutral, 100 would be "fully" expressing the emotion.
                # render the model
                # use the "image_path" variable in a PsychoPy ImageStim image instead of printing it
                image_path0 = makehuman.get_render(img_path, settings, str(model_number))
                path8 = str(img_path) + '/render_' + str(model_number) + '.png'
                image_path.append(path8)
                makehuman.load_model(model_path)
                makehuman.set_expression(neutral, emotion, int(expInfo['happy titrated value']))
                image_path2 = makehuman.get_render(img_path, settings, str(model_number)+"_copy")
                path4 = str(img_path) +'/render_' + str(model_number) + '_copy.png'
                image_path1.append(path4)
                #print(image_path)
                # get ready for the next model
                model_number+=1

            for model_number in range(84,168):
                # make a model (depending on your experiment, you could make a bunch ahead of time,
                #  but then you may as well use the Generate Faces plugin on the GUI instead)
                faceX = fg.make_new_face(avg_face, face_arr)

                # save a model to model_path
                model_path = os.path.join(out_model_path, "face{:04d}{:04d}.mhm".format(participant_n, model_number))
                fg.write_mimic_file(avg_path, model_path, keys, faceX)

                # load the model into makehuman
                makehuman.load_model(model_path)
                # set an emotional expression at a specific percentage
                makehuman.set_expression(neutral, emotion1, 67.4) # 0.0 would be purely neutral, 100 would be "fully" expressing the emotion.
                # render the model
                # use the "image_path" variable in a PsychoPy ImageStim image instead of printing it
                image_pathA = makehuman.get_render(img_path, settings, str(model_number))
                pathA = str(img_path) + '/render_' + str(model_number) + '.png'
                image_path_ang.append(pathA)
                makehuman.load_model(model_path)
                makehuman.set_expression(neutral, emotion1, int(expInfo['anger titrated value']))
                image_path2A = makehuman.get_render(img_path, settings, str(model_number)+"_copy")
                path2A = str(img_path) +'/render_' + str(model_number) + '_copy.png'
                image_path1_ang.append(path2A)
                #print(image_path)
                # get ready for the next model
                model_number+=1

            image_path3 = image_path[0]
            image_path4 = image_path1[0]

        else:
            img_path = os.path.join(path,"renders")
            trial_num = 0
            trial_num0 = 0
            model_number = 0
            participant_n = int(expInfo['participant'])
            image_path = []
            image_path_ang = []
            image_path1 = []
            image_path1_ang = []
            for model_number in range(0,84):
                path8 = str(img_path) + '/render_' + str(model_number) + '.png'
                image_path.append(path8)
                path4 = str(img_path) +'/render_' + str(model_number) + '_copy.png'
                image_path1.append(path4)
                model_number+=1
            for model_number in range(84,168):
                pathA = str(img_path) + '/render_' + str(model_number) + '.png'
                image_path_ang.append(pathA)
                path2A = str(img_path) +'/render_' + str(model_number) + '_copy.png'
                image_path1_ang.append(path2A)
                model_number+=1
            image_path3 = image_path[0]
            image_path4 = image_path1[0]
  Routine render_text
    TextComponent text_3
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Now rendering ...
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  Routine which_em
    CodeComponent code_6
      Code Type = Py
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      Begin Routine:
        em = ['anger', 'happy']
        stim = ['same', 'different']
        shuffle(em)
        shuffle(stim)
        em_trial = em[0]
        stim_trial = stim[0]
        if len(count_A_same) <=42:
            if em_trial == "anger":
                if stim_trial == "same":
                    count_A_same.append(1)
        if len(count_A_diff) <=42:
            if em_trial == "anger":
                if stim_trial == "different":
                    count_A_diff.append(1)
        if len(count_H_same) <=42:
            if em_trial == "happy":
                if stim_trial == "same":
                    count_H_same.append(1)
        if len(count_H_diff) <=42:
            if em_trial == "happy":
                if stim_trial == "different":
                    count_H_diff.append(1)
        if stim_trial == "same":
            if em_trial == "anger":
                if len(count_A_same) > 42:
                    if len(count_A_diff) < 42:
                            stim_trial = "different"
                            count_A_diff.append(1)
                    elif len(count_H_diff) < 42:
                            stim_trial = "different"
                            em_trial = "happy"
                            count_H_diff.append(1)
                    elif len(count_H_same) < 42:
                            em_trial = "happy"
                            count_H_same.append(1)
        if stim_trial == "different":
            if em_trial == "anger":
                if len(count_A_diff) > 42:
                    if len(count_H_diff) < 42:
                            em_trial = "happy"
                            count_H_diff.append(1)
                    elif len(count_H_same) < 42:
                            stim_trial = "same"
                            em_trial = "happy"
                            count_H_same.append(1)
                    elif len(count_A_same) < 42:
                            stim_trial = "same"
                            count_A_same.append(1)
        if stim_trial == "different":
            if em_trial == "happy":
                if len(count_H_diff) >42:
                    if len(count_H_same) <42:
                            stim_trial = "same"
                            count_H_same.append(1)
                    elif len(count_A_same) <42:
                            stim_trial = "same"
                            em_trial = "anger"
                            count_A_same.append(1)
                    elif len(count_A_diff) <42:
                            em_trial = "anger"
                            count_A_diff.append(1)
        if stim_trial == "same":
            if em_trial == "happy":
                if len(count_H_same) >42:
                    if len(count_A_same) < 42:
                            em_trial = "anger"
                            count_A_same.append(1)
                    elif len(count_A_diff) <42:
                            em_trial = "anger"
                            stim_trial = "different"
                            count_A_diff.append(1)
                    elif len(count_H_diff) <42:
                            stim_trial = "different"
                            count_H_diff.append(1)
        thisExp.addData("em", em_trial)
        thisExp.addData("stim", stim_trial)
  Routine titrate_1A
    PolygonComponent fixation_box3
      fillColor = None
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      shape = rectangle
      size = (600, 450)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent image_7
      image [set every repeat] = $path3
      size = (400,300)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = .2
      units = pix
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    ImageComponent image_8
      image [set every repeat] = $path2
      size = (400,300)
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = .2
      units = pix
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    KeyboardComponent key_resp_4
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_7
      Code Type = Py
      End Routine:
        faceX = fg.make_new_face(avg_face, face_arr)
        # save a model to model_path
        model_path0 = os.path.join(out_model_path0, "face{0:04d}.mhm".format(n+100))
        fg.write_mimic_file(avg_path, model_path0, keys, faceX)
        makehuman.load_model(model_path0)
        makehuman.set_expression(neutral, emotion1, 57.7)
        image_path3 = makehuman.get_render(img_path0, settings, str(n+100))
        path3 = str(img_path0) +'/render_' + str(n+100) + '.png'
        if key_resp_4.corr == 0:
            z_listA.append(0)
            z = z_listA[n-1]
        elif key_resp_4.corr == 1:
            z_listA.append(1)
            z = z_listA[n-1]
        if n>2:
            if z_listA[n-2] == 0:
                if z_listA[n-1] == 1:
                    reversals+=1
            elif z_listA[n-2]==1:
                if z_listA[n-1]==0:
                    reversals+=1
        thisExp.addData("stim_lev", c)
        thisExp.addData("trial_n", n)
        if n<3:
            next_stimA = c - (s/n)*(z-acc)
            next_stim_percentA = next_stimA*100
            c = next_stimA
            # save a model to model_path
            makehuman.load_model(model_path0)
            makehuman.set_expression(neutral, emotion1, next_stim_percentA)
            image_path2 = makehuman.get_render(img_path0, settings, str(n+100)+"_titrate")
            path2 = str(img_path0) +'/render_' + str(n+100) + '_titrate.png'
            n+=1
  Routine titrateA
    PolygonComponent fixation_box4
      fillColor = None
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      shape = rectangle
      size = (600,450)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent image_9
      image [set every repeat] = $path3
      size = (400,300)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = .2
      units = pix
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    ImageComponent image_10
      image [set every repeat] = $path2
      size = (400,300)
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = .2
      units = pix
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    KeyboardComponent key_resp_5
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_9
      Code Type = Py
      End Routine:
        faceX = fg.make_new_face(avg_face, face_arr)
        # save a model to model_path
        model_path0 = os.path.join(out_model_path0, "face{0:04d}.mhm".format(n+100))
        fg.write_mimic_file(avg_path, model_path0, keys, faceX)
        makehuman.load_model(model_path0)
        makehuman.set_expression(neutral, emotion1, 57.7)
        image_path3 = makehuman.get_render(img_path0, settings, str(n+100))
        path3 = str(img_path0) +'/render_' + str(n+100) + '.png'

        if key_resp_5.corr == 0:
            z_listA.append(0)
            z = z_listA[n-1]
        elif key_resp_5.corr == 1:
            z_listA.append(1)
            z = z_listA[n-1]

        if z_listA[n-2] == 0:
            if z_listA[n-1] == 1:
                reversals+=1
        elif z_listA[n-2]==1:
            if z_listA[n-1]==0:
                reversals+=1
        thisExp.addData("stim_lev", c)
        thisExp.addData("trial_n", n)
        if n>=3:
            if c > .577:
                next_stimA = c - (s/(2+reversals))*(z-acc)
                next_stim_percentA = next_stimA * 100
                c = next_stimA
                makehuman.load_model(model_path0)
                makehuman.set_expression(neutral, emotion1, next_stim_percentA)
                image_path2 = makehuman.get_render(img_path0, settings, str(n+100)+"_titrate")
                path2 = str(img_path0) +'/render_' + str(n+100) + '_titrate.png'
                n+=1
  Routine next_em
    CodeComponent code_8
      Code Type = Py
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      Begin Routine:
        n=0
        s = .925 #step size
        c = 1.5 # starting stimulus intensity
        acc = .8 #target accuracy level
        reversals = 0
        z_listA = []
        faceX = fg.make_new_face(avg_face, face_arr)
        # save a model to model_path
        model_path0 = os.path.join(out_model_path0, "face{0:04d}.mhm".format(n+100))
        fg.write_mimic_file(avg_path, model_path0, keys, faceX)
        makehuman.load_model(model_path0)
        makehuman.set_expression(neutral, emotion1, 57.7)
        image_path3 = makehuman.get_render(img_path0, settings, str(n+100))
        path3 = str(img_path0) +'/render_' + str(n+100) + '.png'
        makehuman.load_model(model_path0)
        makehuman.set_expression(neutral, emotion1, 150)
        image_path2 = makehuman.get_render(img_path0, settings, str(n+100)+"_titrate")
        path2 = str(img_path0) +'/render_' + str(n+100) + '_titrate.png'
        n+=1
  Routine feedback
    CodeComponent code_10
      Code Type = Py
      Begin Routine:
        if key_resp_6.keys is None:
            fb_message = "Too Slow!"
            timeout = 1
        else:
            fb_message = " "
            fb_color = 'green'
            timeout = 0
    PolygonComponent fixation_box6
      fillColor = None
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      shape = rectangle
      size = (666,500)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $timeout
      units = pix
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    TextComponent text_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $timeout
      text [set every repeat] = $fb_message
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  Routine iti
    CodeComponent code_11
      Code Type = Py
      Begin Routine:
        iti = (random() * .3) + 1 #between 1-1.3seconds for iti, randomized
        thisExp.addData('iti', iti)
    PolygonComponent fixation_box7
      fillColor = None
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      shape = rectangle
      size = (666,500)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
      units = pix
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    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
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  Routine after_render
    TextComponent text_5
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Done rendering! Press 'space' to continue.
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_12
      Code Type = Py
      Begin Routine:
        count_A_same = []
        count_A_diff = []
        count_H_same = []
        count_H_diff = []
  Routine ending
    TextComponent text_6
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You've reached the end of the experiment.
        Thank you for your participation.
    KeyboardComponent key_resp_8
      allowedKeys = 'q'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine break_2
    TextComponent text_7
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Block completed.
        Press the 'right' button to continue.
        You have finished block number (out of 16):
    TextComponent text_8
      color = black
      letterHeight = 0.05
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $count
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    KeyboardComponent key_resp_9
      allowedKeys = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_13
      Code Type = Py
      End Routine:
        count += 1
  Routine to_render
    TextComponent text_9
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press 's' to skip rendering, press 'c' to render.
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    KeyboardComponent key_resp_10
      allowedKeys = 's','c'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine accuracy
    CodeComponent code_15
      Code Type = Py
      Begin Routine:
        accuracy_level = accuracy_train / 84
        thisExp.addData('accuracy', accuracy_level)

        if accuracy_level < 0.6:
            statement = (accuracy_level*100) + 100
        else:
            statement = "Practice is complete."
      End Routine:
        if key_resp_11.keys == "c":
            trials_3.finished = True
        accuracy_train = 0
        accuracy_level = 0
    TextComponent text_12
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $statement
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    KeyboardComponent key_resp_11
      allowedKeys = 'c','r'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine em
    CodeComponent code_16
      Code Type = Py
      Begin Routine:
        em = ['anger', 'happy']
        stim = ['same', 'different']
        shuffle(em)
        shuffle(stim)
        em_trial = em[0]
        stim_trial = stim[0]
        thisExp.addData("em", em_trial)
        thisExp.addData("stim", stim_trial)
  Routine trial0
    CodeComponent code_17
      Code Type = Py
      Begin Routine:
        isi = (random() * .3) + .4 #between 400-700ms isi, randomized
        thisExp.addData('isi', isi)
        start_time = isi + .2 #rt starts after the second image is shown
        rt = start_time + 2 #2 seconds after second image = response time limit
        thisExp.addData('img_onset', start_time)

        if em_trial == "happy":
            train_path1 = image_path[trial_num]
            if stim_trial == "same":
                train_path2 = image_path[trial_num]
                if expInfo['which button yes'] == "left":
                    keyCorrect = ["8"]
                elif expInfo['which button yes'] == "right":
                    keyCorrect = ["1"]
            elif stim_trial == "different":
                train_path2 = image_path1[trial_num]
                if expInfo['which button yes'] == "left":
                    keyCorrect = ["1"]
                elif expInfo['which button yes'] == "right":
                    keyCorrect = ["8"]
            trial_num += 1
        elif em_trial == "anger":
            train_path1 = image_path_ang[trial_num0]
            if stim_trial == "same":
                train_path2 = image_path_ang[trial_num0]
                if expInfo['which button yes'] == "left":
                    keyCorrect = ["8"]
                elif expInfo['which button yes'] == "right":
                    keyCorrect = ["1"]
            elif stim_trial == "different":
                train_path2 = image_path1_ang[trial_num0]
                if expInfo['which button yes'] == "left":
                    keyCorrect = ["1"]
                elif expInfo['which button yes'] == "right":
                    keyCorrect = ["8"]
            trial_num0 += 1
      End Routine:
        if key_resp_12.corr == 1:
            accuracy_train +=1
    PolygonComponent polygon
      fillColor = None
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      saveStartStop = False
      shape = rectangle
      size = (666, 500)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rt
      units = pix
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    ImageComponent image_11
      image [set every repeat] = $train_path1
      size = [533,400]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      units = pix
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    ImageComponent image_12
      image [set every repeat] = $train_path2
      size [set every repeat] = [533,400]
      startVal [time (s)] = $start_time
      stopVal [duration (s)] = .2
      units = pix
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    CodeComponent stim_trigger
      Code Type = Py
      Begin Routine:
        port.close()
        port.open()
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimTriggerSent = False
        stimTriggerSent2 = False
      Each Frame:
        #the first if statement below ensures that the subsequent if statements (and throwing of triggers)
        #only occurs once per trial. That is, only when the stimulus is presented (.status = STARTED) and
        #stimTriggerSent is still False. Once a trigger is sent, we change stimTriggerSent to True so that
        #the stimulus eeg trigger will not be sent again for this trial
        #codes: first image: 03 = happy, 04 = anger
        #second image: 05 = happy same, 06 = happy different, 07 = anger same, 08 = anger different
        if image_11.status == STARTED and not stimTriggerSent:
            if em_trial == "happy": #code denoting which stimulus array was sent
                stimTriggerSent = True
                port.write([0x03]) #hexcode = 3; eeg trigger sent
                time.sleep(PulseWidth) #how long to wait before clearing trigger port
                port.write([0x00]) #clear trigger port by sending hexcode = 0
            elif em_trial == "anger":
                stimTriggerSent = True
                port.write([0x04]) #hexcode = 4
                time.sleep(PulseWidth)
                port.write([0x00])
        if image_12.status == STARTED and not stimTriggerSent2:
            if em_trial == "happy":
                if stim_trial == "same": #code denoting which stimulus array was sent
                    stimTriggerSent2 = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
                    port.write([0x05]) #hexcode = 5; eeg trigger sent
                    time.sleep(PulseWidth) #how long to wait before clearing trigger port
                    port.write([0x00]) #clear trigger port by sending hexcode = 0
                elif stim_trial == "different":
                    stimTriggerSent2 = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
                    port.write([0x06]) #hexcode = 6; eeg trigger sent
                    time.sleep(PulseWidth) #how long to wait before clearing trigger port
                    port.write([0x00]) #clear trigger port by sending hexcode = 0
            elif em_trial == "anger":
                if stim_trial == "same": #code denoting which stimulus array was sent (from excel file)
                    stimTriggerSent2 = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
                    port.write([0x07]) #hexcode = 7; eeg trigger sent
                    time.sleep(PulseWidth) #how long to wait before clearing trigger port
                    port.write([0x00]) #clear trigger port by sending hexcode = 0
                elif stim_trial == "different":
                    stimTriggerSent2 = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
                    port.write([0x08]) #hexcode = 8; eeg trigger sent
                    time.sleep(PulseWidth) #how long to wait before clearing trigger port
                    port.write([0x00]) #clear trigger port by sending hexcode = 0
    KeyboardComponent key_resp_12
      allowedKeys = '1','8'
      correctAns = $keyCorrect
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rt
      store = all keys
      storeCorrect = True
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    CodeComponent resp_trigger
      Code Type = Py
      Begin Routine:
        #clear out the keys_counted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if key_resp_12.keys and len(key_resp_12.keys) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(key_resp_12.keys[-1]) #add this response to list of keys pressed this trial
            # first digit: response (1:1,2:8), second digit: accuracy (1:correct,2:incorrect)
            if len(key_resp_12.keys) < 2: #if this is  the first response
                if key_resp_12.keys[-1] == '1':
                    if stim_trial == 'same':
                        if expInfo['which button yes'] == "right": #correct response
                            port.write([0x0B]) # 11
                            time.sleep(PulseWidth)
                            port.write([0x00])
                        elif expInfo['which button yes'] == "left": #incorrect response
                            port.write([0x0C])# 12
                            time.sleep(PulseWidth)
                            port.write([0x00])
                    elif stim_trial == 'different':
                        if expInfo['which button yes'] == "right": #incorrect response
                            port.write([0x0C])# 12
                            time.sleep(PulseWidth)
                            port.write([0x00])
                        elif expInfo['which button yes'] == "left": #correct response
                            port.write([0x0B])# 11
                            time.sleep(PulseWidth)
                            port.write([0x00])

                elif key_resp_12.keys[-1] == '8':
                    if stim_trial == 'same':
                        if expInfo['which button yes'] == "right": #incorrect response
                            port.write([0x0C]) # 12
                            time.sleep(PulseWidth)
                            port.write([0x00])
                        elif expInfo['which button yes'] == "left": #correct response
                            port.write([0x0B])# 11
                            time.sleep(PulseWidth)
                            port.write([0x00])
                    elif stim_trial == 'different':
                        if expInfo['which button yes'] == "right": #correct response
                            port.write([0x0B])# 11
                            time.sleep(PulseWidth)
                            port.write([0x00])
                        elif expInfo['which button yes'] == "left": #incorrect response
                            port.write([0x0C])# 12
                            time.sleep(PulseWidth)
                            port.write([0x00])

            elif len(key_resp_12.keys) >= 2: #if this is NOT the first response
                #first digit: response, second digit: accuracy
                if key_resp_12.keys[-1] == '1':
                     if stim_trial == 'same':
                        if expInfo['which button yes'] == "right": #correct response
                            port.write([0x15]) # 21
                            time.sleep(PulseWidth)
                            port.write([0x00])
                        elif expInfo['which button yes'] == "left": #incorrect response
                            port.write([0x16])# 22
                            time.sleep(PulseWidth)
                            port.write([0x00])
                     elif stim_trial == 'different':
                        if expInfo['which button yes'] == "right": #incorrect response
                            port.write([0x16])# 22
                            time.sleep(PulseWidth)
                            port.write([0x00])
                        elif expInfo['which button yes'] == "left": #correct response
                            port.write([0x15])# 21
                            time.sleep(PulseWidth)
                            port.write([0x00])

                elif key_resp_12.keys[-1] == '8':
                    if stim_trial == 'same':
                        if expInfo['which button yes'] == "right": #incorrect response
                            port.write([0x16]) # 22
                            time.sleep(PulseWidth)
                            port.write([0x00])
                        elif expInfo['which button yes'] == "left": #correct response
                            port.write([0x15])# 21
                            time.sleep(PulseWidth)
                            port.write([0x00])
                    elif stim_trial == 'different':
                        if expInfo['which button yes'] == "right": #correct response
                            port.write([0x15])# 21
                            time.sleep(PulseWidth)
                            port.write([0x00])
                        elif expInfo['which button yes'] == "left": #incorrect response
                            port.write([0x16])# 22
                            time.sleep(PulseWidth)
                            port.write([0x00])
    CodeComponent code_23
      Code Type = Py
      Begin Routine:
        size1 = [453, 613]
        shuffle(size1)
        first_size = size1[0]
        second_size = size1[0]*0.75
        image_12_size = (first_size, second_size)
        image_12.size = image_12_size
        thisExp.addData('image_size2', image_12_size)
  Routine ready
    TextComponent text_13
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Practice done. Press the right button to begin the task.
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    KeyboardComponent key_resp_13
      allowedKeys = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_18
      Code Type = Py
      Begin Routine:
        trial_num = 0
        trial_num0 = 0
  Routine reset_count
    CodeComponent code_19
      Code Type = Py
      Begin Routine:
        trial_num = 0
        trial_num0 = 0
        count_A_same = []
        count_A_diff = []
        count_H_same = []
        count_H_diff = []
  Routine setup
    CodeComponent code_20
      Code Type = Py
      Begin Experiment:
        import serial #used for sending eeg triggers
        import time #indirerctly used for sending eeg triggers (how long to wait before clearing port)
        win.mouseVisible = False #hide mouse cursor
        port = serial.Serial('COM3') #open specified port (COM3) for sending eeg triggers to
        port.close()
        port.open()
        PulseWidth = 0.002 #how long to wait before clearing port after sending trigger (2 ms is sufficient at 1000 hz sampling rate)

        port.write([0x00]) #clear serial port
        time.sleep(PulseWidth) #wait PulseWidth amount of time before doing anything else
      End Experiment:
        win.mouseVisible = True #make the mouse cursor visable again
        #port.write([0xFF]) #set port values back to default state (FF)
        time.sleep(PulseWidth) #wait PulseWidth amount of time before doing anything else
        #port.close() #close port opened at start of exp
  Routine mult_keys
    CodeComponent code_21
      Code Type = Py
      Begin Routine:
        iti = (random() * .3) + 1
        thisExp.addData('iti', iti)
    PolygonComponent polygon_2
      fillColor = None
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      shape = rectangle
      size = (666,500)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
      units = pix
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    TextComponent text_14
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
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    KeyboardComponent key_resp_15
      allowedKeys = '1','8'
      correctAns = $keyCorrect
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
      store = all keys
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    CodeComponent code_22
      Code Type = Py
      Begin Routine:
        keys_counted = []
      Each Frame:
        if key_resp_15.keys and len(key_resp_15.keys) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(key_resp_15.keys[-1])
            if len(key_resp_15.keys) >=1 : #if this is NOT the first response
                    #first digit: response, second digit: accuracy
                    if key_resp_15.keys[-1] == '1':
                         if stim_trial == 'same':
                            if expInfo['which button yes'] == "right": #correct response
                                port.write([0x15]) # 21
                                time.sleep(PulseWidth)
                                port.write([0x00])
                            elif expInfo['which button yes'] == "left": #incorrect response
                                port.write([0x16])# 22
                                time.sleep(PulseWidth)
                                port.write([0x00])
                         elif stim_trial == 'different':
                            if expInfo['which button yes'] == "right": #incorrect response
                                port.write([0x16])# 22
                                time.sleep(PulseWidth)
                                port.write([0x00])
                            elif expInfo['which button yes'] == "left": #correct response
                                port.write([0x15])# 21
                                time.sleep(PulseWidth)
                                port.write([0x00])

                    elif key_resp_15.keys[-1] == '8':
                        if stim_trial == 'same':
                            if expInfo['which button yes'] == "right": #incorrect response
                                port.write([0x16]) # 22
                                time.sleep(PulseWidth)
                                port.write([0x00])
                            elif expInfo['which button yes'] == "left": #correct response
                                port.write([0x15])# 21
                                time.sleep(PulseWidth)
                                port.write([0x00])
                        elif stim_trial == 'different':
                            if expInfo['which button yes'] == "right": #correct response
                                port.write([0x15])# 21
                                time.sleep(PulseWidth)
                                port.write([0x00])
                            elif expInfo['which button yes'] == "left": #incorrect response
                                port.write([0x16])# 22
                                time.sleep(PulseWidth)
                                port.write([0x00])
  Routine setup_2
    CodeComponent code_25
      Code Type = Py
      Before Experiment:
        # the face_generator.py file is from the face generator plugin
        import face_generator as fg
        import numpy as np
        import os
        from glob import glob
        # the socket plugin comes with py_client.py
        from py_client import PythonMHC
        _thisDir = os.path.dirname(os.path.abspath(__file__))
        os.chdir(_thisDir)
        # first, setup your directories and load your pre-existing sample models:
        # the psychopy project directory
        path = _thisDir
        # where are the pre-established models (aside from the average identity)?
        model_samples = os.path.join(path,"sample_models")
        models_list = glob(os.path.join(model_samples, "*.mhm"))
        # set the path/name to your average identity
        avg_path = os.path.join(path,"identity_average.mhm")
        # load the average identity's parameters
        avg = fg.read_params(avg_path)

        # load the other models' parameters
        full_params = [fg.read_params(f) for f in models_list]

        # load the keys, the average, and the rest of the models
        all_stuff = fg.get_ordered_values(avg, *full_params)
        # the keys for the features being changed
        keys = all_stuff[0]
        # the average face parameters (similar to avg, but it includes 0's for key values that exist in the other model files)
        avg_face = all_stuff[1]
        face_arr = np.array(all_stuff[2:])
        radius, face_arr = fg.set_faces_to_radius(avg_face, face_arr)

        # get ready to actually make models and render things.
        # these are the render settings
        # you may want a different image size
        size = (533,400)
        settings = dict(AA=False, dimensions=size, lightmapSSS=False)

        # start the socket client (do this after you already pressed the Socket Render button in MakeHuman)
        makehuman = PythonMHC()

        emotion_file = path + "/happy_teeth.mhpose"
        emotion_file_ang = path + "/anger.mhpose"
        # load the expression parameters for neutral and some emotion (as specified by an mhpose file).
        neutral, emotion = makehuman.load_expression(emotion_file)
        neutral, emotion1 = makehuman.load_expression(emotion_file_ang)
        trial_num_block = 0
        count = 1
      Begin Experiment:
        win.mouseVisible = False
      Begin Routine:
        count = 1
      End Experiment:
        win.mouseVisible = True
  Routine feedback0
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        if key_resp_12.keys is None:
            fb_message = "Too Slow!"
            timeout = 1
        else:
            fb_message = " "
            fb_color = 'green'
            timeout = 0
    PolygonComponent polygon_3
      fillColor = None
      lineColor = black
      lineWidth = 2
      shape = rectangle
      size = (666, 500)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $timeout
      units = pix
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    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $timeout
      text [set every repeat] = $fb_message
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  Routine feedback0_2
  Routine begin
    TextComponent text_10
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press the right key when you are ready to begin.
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    KeyboardComponent key_resp_14
      allowedKeys = '8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine setup
  Routine setup_2
  Routine to_render
  Routine render_text
  Routine rendering
  Routine after_render
  Routine instr
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = sequential
    nReps = 10
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    Routine begin
    Routine reset_count
    Routine iti
    LoopInitiator trials_4 loopType="TrialHandler"
      loopType = sequential
      nReps = 84
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      Routine em
      Routine trial0
      Routine feedback0
      Routine mult_keys
    LoopTerminator trials_4
    Routine accuracy
  LoopTerminator trials_3
  Routine ready
  LoopInitiator trials_5 loopType="TrialHandler"
    loopType = sequential
    nReps = 8
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    Routine reset_count
    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = sequential
      nReps = 2
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      Routine iti
      LoopInitiator trials loopType="TrialHandler"
        loopType = sequential
        nReps = 84
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        Routine which_em
        Routine trial
        Routine feedback
        Routine mult_keys
      LoopTerminator trials
      Routine break_2
    LoopTerminator trials_2
  LoopTerminator trials_5
  Routine ending
